CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:image
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:inverseImage
    Image or measurement?:Image
    Select the first image:image
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyObjectsManually:[module_num:6|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
    Select the input image:inverseImage
    Name the objects to be identified:BG

MeasureImageIntensity:[module_num:7|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
    Select images to measure:inverseImage
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:BG
    Calculate custom percentiles:No
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:No
    Ignore the image masks?:No
    Name the output image:ImageMinusBG
    Image or measurement?:Image
    Select the first image:inverseImage
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_inverseImage_BG

Threshold:[module_num:9|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
    Select the input image:ImageMinusBG
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:10|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
    Select the input image:Threshold
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:ConvertImageToObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:12|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
    Select the objects to filter:ConvertImageToObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:Yes
    Maximum value:25
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
OverlayObjects:[module_num:13|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
    Input:ImageMinusBG
    Name the output image:OverlayObjects
    Objects:FilterObjects
    Opacity:0.3

IdentifyObjectsManually:[module_num:14|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
    Select the input image:ImageMinusBG
    Name the objects to be identified:region

MaskObjects:[module_num:15|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
    Select objects to be masked:FilterObjects
    Name the masked objects:MaskedCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:region
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:ImageMinusBG
    Select objects to measure:MaskedCells

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageMinusBG
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:MaskedCells

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:MaskedCells|Intensity_MeanIntensity_ImageMinusBG
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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